CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "405")
    Name to assign these images:LysoSensor
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "488")
    Name to assign these images:CellROX
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "561")
    Name to assign these images:TMRM
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "647")
    Name to assign these images:Syto
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MedianFilter:[module_num:5|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
    Select the input image:TMRM
    Name the output image:MedianFilter
    Window:4

Threshold:[module_num:6|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
    Select the input image:MedianFilter
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskImage:[module_num:7|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
    Select the input image:TMRM
    Name the output image:TMRM_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Threshold
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):1,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:9|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
    Select the input objects:IdentifyPrimaryObjects
    Name the output objects:expanded_soma
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:10
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
MaskImage:[module_num:10|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
    Select the input image:TMRM
    Name the output image:neurites
    Use objects or an image as a mask?:Objects
    Select object for mask:expanded_soma
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    Invert the mask?:Yes

RescaleIntensity:[module_num:11|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enabled:False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
    Select the input image:neurites
    Name the output image:rescaled_neurites
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.15
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
EnhanceOrSuppressFeatures:[module_num:12|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
    Select the input image:neurites
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:6
    Feature type:Neurites
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    Smoothing scale:1.0
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    Enhancement method:Line structures
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    Rescale result image:Yes

Threshold:[module_num:13|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the output image:threshold_neurites
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Morph:[module_num:14|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
    Select the input image:threshold_neurites
    Name the output image:morph_clean
    Select the operation to perform:clean
    Number of times to repeat operation:Once
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
Morph:[module_num:15|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
    Select the input image:morph_clean
    Name the output image:morph_bridge
    Select the operation to perform:bridge
    Number of times to repeat operation:Once
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
Morph:[module_num:16|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
    Select the input image:morph_bridge
    Name the output image:neurite_mask
    Select the operation to perform:diag
    Number of times to repeat operation:Custom
    Repetition number:5
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
MaskImage:[module_num:17|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
    Select the input image:LysoSensor
    Name the output image:LysoSensor_neurites_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:neurite_mask
    Invert the mask?:No

MaskImage:[module_num:18|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
    Select the input image:CellROX
    Name the output image:CellROX_neurites_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:neurite_mask
    Invert the mask?:No

MaskImage:[module_num:19|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
    Select the input image:TMRM
    Name the output image:TMRM_neurites_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:neurite_mask
    Invert the mask?:No

MaskImage:[module_num:20|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
    Select the input image:Syto
    Name the output image:Syto_neurites_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:neurite_mask
    Invert the mask?:No

MeasureImageIntensity:[module_num:21|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
    Select images to measure:CellROX_neurites_masked, LysoSensor_neurites_masked, Syto_neurites_masked, TMRM_neurites_masked
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureImageAreaOccupied:[module_num:22|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
    Measure the area occupied by:Binary Image
    Select binary images to measure:neurite_mask
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:neurite_mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:TMRM
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|neurite_masks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:2022-08-12_neurite_segment_
    Overwrite existing files without warning?:Yes
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