CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "405")
    Name to assign these images:LysoSensor
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "488")
    Name to assign these images:CellROX
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "561")
    Name to assign these images:TMRM
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "647")
    Name to assign these images:Syto
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MedianFilter:[module_num:5|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
    Select the input image:TMRM
    Name the output image:MedianFilter
    Window:3

Threshold:[module_num:6|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
    Select the input image:MedianFilter
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskImage:[module_num:7|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
    Select the input image:LysoSensor
    Name the output image:Lysosensor_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold
    Invert the mask?:No

MaskImage:[module_num:8|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
    Select the input image:CellROX
    Name the output image:CellROX_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold
    Invert the mask?:No

MaskImage:[module_num:9|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
    Select the input image:TMRM
    Name the output image:TMRM_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold
    Invert the mask?:No

MaskImage:[module_num:10|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
    Select the input image:Syto
    Name the output image:Syto_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold
    Invert the mask?:No

MeasureImageIntensity:[module_num:11|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
    Select images to measure:CellROX_masked, Lysosensor_masked, Syto_masked, TMRM_masked, Threshold
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:2022-08-12_soma_image_
    Overwrite existing files without warning?:Yes
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