CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "c1.tif")
    Name to assign these images:LysoSensor
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c2.tif")
    Name to assign these images:CellROX
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c3.tif")
    Name to assign these images:TMRM
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c4.tif")
    Name to assign these images:Syto
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MedianFilter:[module_num:5|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
    Select the input image:TMRM
    Name the output image:TMRM_filtered
    Window:4

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:TMRM_filtered
    Name the primary objects to be identified:soma
    Typical diameter of objects, in pixel units (Min,Max):10,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CellROX, LysoSensor, Syto, TMRM
    Select objects to measure:soma

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:CellROX, LysoSensor, Syto, TMRM
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes only
    Maximum zernike moment:9
    Select objects to measure:soma
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:soma
    Select neighboring objects to measure:soma
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:soma
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:Yes
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    Name the output image:soma_outlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:soma

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:soma_outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:TMRM
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|soma_outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:2022-08-12_soma_objects_
    Overwrite existing files without warning?:Yes
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