CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "405")
    Name to assign these images:dapi_pre_illum
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "488")
    Name to assign these images:psd95_pre_illum
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "561")
    Name to assign these images:map2_pre_illum
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "647")
    Name to assign these images:synapsin_pre_illum
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:dapi_pre_illum
    Name the output image:dapi_illum
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:psd95_pre_illum
    Name the output image:psd95_illum
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:map2_pre_illum
    Name the output image:map2_illum
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:synapsin_pre_illum
    Name the output image:synapsin_illum
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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
    Select the input image:dapi_pre_illum
    Name the output image:dapi
    Select the illumination function:dapi_illum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:10|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
    Select the input image:psd95_pre_illum
    Name the output image:psd95
    Select the illumination function:psd95_illum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:11|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
    Select the input image:map2_pre_illum
    Name the output image:map2
    Select the illumination function:map2_illum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:12|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
    Select the input image:synapsin_pre_illum
    Name the output image:synapsin
    Select the illumination function:synapsin_illum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

EnhanceOrSuppressFeatures:[module_num:13|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
    Select the input image:map2
    Name the output image:map2_neurites_enhanced
    Select the operation:Enhance
    Feature size:4
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Tubeness
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    Rescale result image:No

Threshold:[module_num:14|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
    Select the input image:map2_neurites_enhanced
    Name the output image:map2_mask
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.75
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MedianFilter:[module_num:15|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
    Select the input image:dapi
    Name the output image:dapi_filtered
    Window:3

IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:dapi_filtered
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
DilateObjects:[module_num:17|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
    Select the input object:nuclei
    Name the output object:dilated_nuclei
    Structuring element:disk,15

MaskImage:[module_num:18|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
    Select the input image:map2_mask
    Name the output image:neurite_mask
    Use objects or an image as a mask?:Objects
    Select object for mask:dilated_nuclei
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    Invert the mask?:Yes

MaskImage:[module_num:19|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
    Select the input image:dapi
    Name the output image:dapi_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:neurite_mask
    Invert the mask?:No

MaskImage:[module_num:20|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
    Select the input image:psd95
    Name the output image:psd95_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:neurite_mask
    Invert the mask?:No

MaskImage:[module_num:21|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
    Select the input image:map2
    Name the output image:map2_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:neurite_mask
    Invert the mask?:No

MaskImage:[module_num:22|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
    Select the input image:synapsin
    Name the output image:synapsin_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:neurite_mask
    Invert the mask?:No

MorphologicalSkeleton:[module_num:23|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
    Select the input image:neurite_mask
    Name the output image:neurite_skeleton

MeasureImageSkeleton:[module_num:24|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
    Select an image to measure:neurite_skeleton

MeasureImageAreaOccupied:[module_num:25|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
    Measure the area occupied by:Binary Image
    Select binary images to measure:neurite_mask, neurite_skeleton
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
MeasureColocalization:[module_num:26|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
    Select images to measure:psd95_masked, synapsin_masked
    Set threshold as percentage of maximum intensity for the images:0
    Select where to measure correlation:Across entire image
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    Run all metrics?:Yes
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    Method for Costes thresholding:Accurate

MeasureImageIntensity:[module_num:27|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
    Select images to measure:dapi_masked, map2_masked, psd95_masked, synapsin_masked
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:neurite_mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:psd95_pre_illum
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|neurite_mask
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:29|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:2022-12-19_neurite_segment_
    Overwrite existing files without warning?:Yes
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