CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch1")
    Name to assign these images:LysoSensor_pre_illum
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch2")
    Name to assign these images:NeuO_pre_illum
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch3")
    Name to assign these images:TMRM_pre_illum
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch4")
    Name to assign these images:CellROX_pre_illum
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:LysoSensor_pre_illum
    Name the output image:LysoSensor_illum
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:NeuO_pre_illum
    Name the output image:NeuO_illum
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:TMRM_pre_illum
    Name the output image:TMRM_illum
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:CellROX_pre_illum
    Name the output image:CellRox_illum
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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
    Select the input image:LysoSensor_pre_illum
    Name the output image:LysoSensor
    Select the illumination function:LysoSensor_illum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:10|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
    Select the input image:NeuO_pre_illum
    Name the output image:NeuO
    Select the illumination function:NeuO_illum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:11|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
    Select the input image:TMRM_pre_illum
    Name the output image:TMRM
    Select the illumination function:TMRM_illum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:12|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
    Select the input image:CellROX_pre_illum
    Name the output image:CellROX
    Select the illumination function:CellRox_illum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

MedianFilter:[module_num:13|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
    Select the input image:NeuO
    Name the output image:MedianFilter
    Window:3

Threshold:[module_num:14|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
    Select the input image:MedianFilter
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskImage:[module_num:15|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
    Select the input image:LysoSensor
    Name the output image:Lysosensor_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold
    Invert the mask?:No

MaskImage:[module_num:16|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
    Select the input image:CellROX
    Name the output image:CellROX_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold
    Invert the mask?:No

MaskImage:[module_num:17|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
    Select the input image:TMRM
    Name the output image:TMRM_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold
    Invert the mask?:No

MaskImage:[module_num:18|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
    Select the input image:NeuO
    Name the output image:NeuO_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold
    Invert the mask?:No

MeasureImageIntensity:[module_num:19|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
    Select images to measure:CellROX_masked, Lysosensor_masked, NeuO_masked, TMRM_masked, Threshold
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:Threshold
    Select method for constructing file names:From image filename
    Select image name for file prefix:NeuO_pre_illum
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|soma_mask
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:21|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:2023-02-28_soma_segment_
    Overwrite existing files without warning?:Yes
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