CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:31
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch3")
    Name to assign these images:GCase
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch2")
    Name to assign these images:LysoTracker
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DAPI
    Name the output image:DAPI_illum
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:GCase
    Name the output image:GCase_illum
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:LysoTracker
    Name the output image:LysoTracker_illum
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:DAPI
    Name the output image:DAPI_corrected
    Select the illumination function:DAPI_illum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:9|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
    Select the input image:GCase
    Name the output image:GCase_corrected
    Select the illumination function:GCase_illum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:10|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
    Select the input image:LysoTracker
    Name the output image:LysoTracker_corrected
    Select the illumination function:LysoTracker_illum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

HistogramMatching:[module_num:11|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
    Select the input image:GCase_corrected
    Name the output image:GCase_eq
    Is you image 3D?:No
    Use a frame within image as reference?:No
    Image to use as reference :DAPI_corrected
    Frame number:5

HistogramMatching:[module_num:12|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
    Select the input image:LysoTracker_corrected
    Name the output image:LysoTracker_eq
    Is you image 3D?:No
    Use a frame within image as reference?:No
    Image to use as reference :DAPI_corrected
    Frame number:5

ImageMath:[module_num:13|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:cytoplasm
    Image or measurement?:Image
    Select the first image:GCase_eq
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:LysoTracker_eq
    Multiply the second image by:1.0
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
RunCellpose:[module_num:14|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
    Select the input image:cytoplasm
    Expected object diameter:30
    Detection mode:cyto2
    Name the output object:cytoplasm_outlines_pre_filt
    Use GPU:No
    Use averaging:Yes
    Supply nuclei image as well?:Yes
    Select the nuclei image:DAPI_corrected
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:20
    Use Omnipose for mask reconstruction:No
    Invert images:No

MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:cytoplasm_outlines_pre_filt
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

FilterObjects:[module_num:16|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
    Select the objects to filter:cytoplasm_outlines_pre_filt
    Name the output objects:cytoplasm_outlines
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_EquivalentDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:32
    Filter using a maximum measurement value?:No
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
MeasureColocalization:[module_num:17|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
    Select images to measure:GCase_corrected, LysoTracker_corrected
    Set threshold as percentage of maximum intensity for the images:0
    Select where to measure correlation:Within objects
    Select objects to measure:cytoplasm_outlines
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureObjectSizeShape:[module_num:18|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
    Select object sets to measure:cytoplasm_outlines
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:19|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
    Select images to measure:DAPI_corrected, GCase_corrected, LysoTracker_corrected
    Select objects to measure:cytoplasm_outlines

MeasureObjectIntensityDistribution:[module_num:20|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
    Select images to measure:DAPI_corrected, GCase_corrected, LysoTracker_corrected
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:cytoplasm_outlines
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectNeighbors:[module_num:21|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
    Select objects to measure:cytoplasm_outlines
    Select neighboring objects to measure:cytoplasm_outlines
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:Yes
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    Name the output image:soma_outlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:cytoplasm_outlines

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:soma_outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|soma_outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:cytoplasm
    Select method for constructing file names:From image filename
    Select image name for file prefix:GCase
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|cytoplasm
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:DAPI_illum
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|illum
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:GCase_illum
    Select method for constructing file names:From image filename
    Select image name for file prefix:GCase
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|illum
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:LysoTracker_illum
    Select method for constructing file names:From image filename
    Select image name for file prefix:LysoTracker
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|illum
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:DAPI_corrected
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|max_projections_corrected
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:GCase_corrected
    Select method for constructing file names:From image filename
    Select image name for file prefix:GCase
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|max_projections_corrected
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:LysoTracker_corrected
    Select method for constructing file names:From image filename
    Select image name for file prefix:LysoTracker
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|max_projections_corrected
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:31|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:2023-03-08_GBA_analysis_
    Overwrite existing files without warning?:Yes
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