CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:28
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch3")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch2")
    Name to assign these images:TDP43
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch1")
    Name to assign these images:MAP2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DAPI
    Name the output image:DAPI_illum
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:TDP43
    Name the output image:TDP43_illum
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:MAP2
    Name the output image:MAP2_illum
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:DAPI
    Name the output image:DAPI_corrected
    Select the illumination function:DAPI_illum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:9|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
    Select the input image:TDP43
    Name the output image:TDP43_corrected
    Select the illumination function:TDP43_illum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:10|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
    Select the input image:MAP2
    Name the output image:MAP2_corrected
    Select the illumination function:MAP2_illum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RunCellpose:[module_num:11|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
    Select the input image:MAP2_corrected
    Expected object diameter:25
    Detection mode:custom
    Name the output object:cytoplasm_outlines_pre_filt
    Use GPU:No
    Use averaging:Yes
    Supply nuclei image as well?:Yes
    Select the nuclei image:DAPI_corrected
    Save probability image?:No
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    Location of the pre-trained model file:Default Input Folder sub-folder|/home/ubuntu/cell-imaging/cellpose_models
    Pre-trained model file name:2023-03-27_ALS0006_DIV11_DIV18_DIV25_CP_20230327_141243
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:5
    Use Omnipose for mask reconstruction:No
    Invert images:No

IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:DAPI_corrected
    Name the primary objects to be identified:nuclei_pre_mask
    Typical diameter of objects, in pixel units (Min,Max):12,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:13|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enabled:False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
    Select the input objects:nuclei_pre_filt
    Name the objects to be identified:cytoplasm_outlines_pre_filt
    Select the method to identify the secondary objects:Propagation
    Select the input image:TDP43_corrected
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:cytoplasm_outlines_pre_filt
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:15|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
    Select the objects to filter:cytoplasm_outlines_pre_filt
    Name the output objects:cytoplasm_outlines_pre_masked
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_EquivalentDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:20
    Filter using a maximum measurement value?:Yes
    Maximum value:45
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
MaskObjects:[module_num:16|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
    Select objects to be masked:nuclei_pre_mask
    Name the masked objects:nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:cytoplasm_outlines_pre_masked
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.75
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:17|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
    Parent objects:cytoplasm_outlines_pre_masked
    Child objects:nuclei
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
MaskObjects:[module_num:18|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
    Select objects to be masked:cytoplasm_outlines_pre_masked
    Name the masked objects:cytoplasm_outlines
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

MeasureColocalization:[module_num:19|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
    Select images to measure:DAPI_corrected, MAP2_corrected, TDP43_corrected
    Set threshold as percentage of maximum intensity for the images:0
    Select where to measure correlation:Within objects
    Select objects to measure:cytoplasm_outlines, nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureObjectIntensity:[module_num:20|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
    Select images to measure:DAPI_corrected, MAP2_corrected, TDP43_corrected
    Select objects to measure:cytoplasm_outlines, nuclei

MeasureObjectIntensityDistribution:[module_num:21|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
    Select images to measure:DAPI_corrected, MAP2_corrected, TDP43_corrected
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:cytoplasm_outlines
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:22|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
    Select object sets to measure:cytoplasm_outlines, nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

MeasureObjectNeighbors:[module_num:23|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
    Select objects to measure:cytoplasm_outlines
    Select neighboring objects to measure:cytoplasm_outlines
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MAP2_corrected
    Name the output image:soma_outlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:cytoplasm_outlines

OverlayOutlines:[module_num:25|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
    Display outlines on a blank image?:Yes
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    Name the output image:nuclei_outlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:nuclei

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:soma_outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:TDP43
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|soma_outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:nuclei_outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|nuclei_outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:28|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:2023-04-03_cellpose_tdp-43_
    Overwrite existing files without warning?:Yes
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